PsychoPy2experiment version="2023.1.3"
Settings
  Audio latency priority = 0
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Intentional_Binding_Task
  keyboardBackend = ioHub
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Routines
  Routine trial
    PolygonComponent Fixation
      fillColor = white
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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    PolygonComponent Polygon
      fillColor = green
      lineColor = green
      shape = circle
      size = (0.2, 0.2)
      startVal [time (s)] = 7
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    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 7.0
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  Routine Routine_2
    PolygonComponent polygon
      fillColor = white
      ori [set every repeat] = angle
      shape = rectangle
      size = (0.1, 0.5)
      startVal [time (s)] = $delay
      stopVal [duration (s)] = 0.3
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  Routine Routine_3
    TextComponent display_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Report the delay between the key press and the rectangle (0-1000) in ms
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    SliderComponent slider
      forceEndRoutine = True
      granularity = 0
      labels = "100", "200", "300", "400", "500", "600", "700", "800", "900", "1000"
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3, 4, 5, 6, 7, 8, 9, 10)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = binding_cond.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{'delay': 0.1, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.4, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.7, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.1, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.4, 'angle': 45, 'condition': 'unexp'},
      {'delay': 0.7, 'angle': 125, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 125, 'condition': 'exp'},
      {'delay': 0.4, 'angle': 125, 'condition': 'exp'},
      {'delay': 0.7, 'angle': 125, 'condition': 'exp'},
      {'delay': 0.1, 'angle': 125, 'condition': 'exp'}]
    Routine trial
    Routine Routine_2
    Routine Routine_3
  LoopTerminator trials
