PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1536, 864]
  expName = Krishi_Solo_Project
  keyboardBackend = ioHub
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Routines
  Routine Informed_Consent
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Do you give your consent to participate in an experiment by Krishi Shah for an academic course? If yes, you will be shown a series of white words on the screen. After that, you will be asked to judge whether or not the red word on the screen is one you have seen in the previous list or not. Press 'o' if the word is old, and 'n' if it is new. Please press 'YES' to continue.
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    ButtonComponent button
      bold = True
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.2, 0.1)
      startVal [time (s)] = 0
      text = Yes
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  Routine Sleep
    SliderComponent slider1
      forceEndRoutine = True
      granularity = 0
      labels = "3-6", "6-9", "9-12"
      letterHeight = 0.05
      pos = (0, -0.2)
      size = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = rating
      ticks = (1, 2, 3)
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = How many hours of sleep did you get last night?
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  Routine Words
    TextComponent words
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.5
      text [set every repeat] = $study_word
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  Routine Recollection
    TextComponent text_3
      color = red
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $test_words
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    KeyboardComponent key_resp
      allowedKeys = 'o','n'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine Informed_Consent
  Routine Sleep
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Solo.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'study_word': 'Calm'},
      {'study_word': 'Cheerful'},
      {'study_word': 'Joyous'},
      {'study_word': 'Hopeful'},
      {'study_word': 'Excited '},
      {'study_word': 'Chemistry'},
      {'study_word': 'History'},
      {'study_word': 'Psychology'},
      {'study_word': 'Law'},
      {'study_word': 'Journalism'},
      {'study_word': 'In '},
      {'study_word': 'On '},
      {'study_word': 'At'},
      {'study_word': 'Under'},
      {'study_word': 'Toward'},
      {'study_word': 'Pasta'},
      {'study_word': 'Cupcakes'},
      {'study_word': 'Oranges'},
      {'study_word': 'Apples'},
      {'study_word': 'Syrup'}]
    Routine Words
  LoopTerminator trials
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Solo2.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'test_words': 'Calm', 'old_new': 'old ', 'category': 'mood', 'corr_ans': 'o'},
      {'test_words': 'Cheerful', 'old_new': 'old ', 'category': 'mood', 'corr_ans': 'o'},
      {'test_words': 'Joyous', 'old_new': 'old ', 'category': 'mood', 'corr_ans': 'o'},
      {'test_words': 'Hopeful', 'old_new': 'old ', 'category': 'mood', 'corr_ans': 'o'},
      {'test_words': 'Excited ', 'old_new': 'old ', 'category': 'mood', 'corr_ans': 'o'},
      {'test_words': 'Chemistry', 'old_new': 'old ', 'category': 'major', 'corr_ans': 'o'},
      {'test_words': 'History', 'old_new': 'old ', 'category': 'major', 'corr_ans': 'o'},
      {'test_words': 'Psychology', 'old_new': 'old ', 'category': 'major', 'corr_ans': 'o'},
      {'test_words': 'Law', 'old_new': 'old ', 'category': 'major', 'corr_ans': 'o'},
      {'test_words': 'Journalism', 'old_new': 'old ', 'category': 'major', 'corr_ans': 'o'},
      {'test_words': 'In ', 'old_new': 'old ', 'category': 'preposition', 'corr_ans': 'o'},
      {'test_words': 'On ', 'old_new': 'old ', 'category': 'preposition', 'corr_ans': 'o'},
      {'test_words': 'At', 'old_new': 'old ', 'category': 'preposition', 'corr_ans': 'o'},
      {'test_words': 'Under', 'old_new': 'old ', 'category': 'preposition', 'corr_ans': 'o'},
      {'test_words': 'Toward', 'old_new': 'old ', 'category': 'preposition', 'corr_ans': 'o'},
      {'test_words': 'Pasta', 'old_new': 'old ', 'category': 'food', 'corr_ans': 'o'},
      {'test_words': 'Cupcakes', 'old_new': 'old ', 'category': 'food', 'corr_ans': 'o'},
      {'test_words': 'Oranges', 'old_new': 'old ', 'category': 'food', 'corr_ans': 'o'}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
    Routine Recollection
  LoopTerminator trials_2
